input = getDirectory("Choose an input directory");
output = getDirectory("Choose an output directory");

processFolder(input); 

function processFolder(input) {
	list = getFileList(input);
	for (i=0; i<list.length; i++) {
    	        if(endsWith(list[i], ".dv")) { //pick all files with .dv extension, replace this for other extensions
    		    processFile(input, output, list[i]);
		} else if(endsWith(list[i], "/") && !matches(output, ".*" + substring(list[i], 0, lengthOf(list[i])-1) + ".*")) {
   		    //if the file encountered is a subfolder, go inside and run the whole process in the subfolder
    		    processFolder(""+input+list[i]);
		} else {
    		    //if the file encountered is not an image nor a folder just print the name in the log window
       		    print(input + list[i]);
		}
    }
}

for(i=0;i<list.length;i++){
function processFile(input, output2, file) {
	open(input + file);
	title=getTitle();
	title2 = File.nameWithoutExtension;
	output2=output+title2;
	File.makeDirectory(output2); //this part makes the parent folder for each image
	
	run("Split Channels");
	two = "C2-" + title;
	one = "C1-" + title; 
	
	selectWindow("C2-"+title);
	saveAs("tiff", output2+File.separator +"C2-"+title);
	C2=output2 +"C2";
	File.makeDirectory(C2);  //this part makes the folder for each channel 
	//saveAs("tiff", C2+File.separator +"C2-"+title); //this works and saves each image channel in its own folder, I just need this as an image sequence
	run("Image Sequence... ", "select="+C2+" dir="+C2+" format=TIFF name=C2_"); //this writes to that directory
	
	selectWindow("C1-"+title);
	saveAs("tiff", output2+File.separator +"C1-"+title);
	C1=output2 +"C1";
	File.makeDirectory(C1);
	//saveAs("tiff", C1+File.separator +"C1-"+title);
	run("Image Sequence... ", "select="+C1+" dir="+C1+" format=TIFF name=C1_"); //this writes to that directory
	
	print(output);
	close(file);
}

}
	
//setBatchMode(false);
run("Close");
